OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client port 1028 => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1028
#0.Signal stream -> Signal Resampling => #1
  New Sampling Frequency = 1024
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
-> Reference Channel
  Channel = 33;34
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 45
  Band Pass Ripple (dB) = 0.5
Data=#3, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#1, Stimulation=#0.Stimulations -> GDF file writer
  Filename = eye_close-[$core{date}-$core{time}].gdf

Graz Motor Imagery BCI Stimulator => #6
  Lua Script = C:/openvibe-2.1.0-hgKim/share/openvibe/scenarios/bci-examples/motor-imagery/motor-imagery-bci-graz-test.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 360
  Wait For Cue Duration (in sec) = 0
  Display Cue Duration (in sec) = 0
  Feedback Duration (in sec) = 1
  End of Trial Minimum Duration (in sec) = 1
  End of Trial Maximum Duration (in sec) = 1
Stimulations=#6 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
