OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client "1P" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1028
#0.Signal stream -> Signal Resampling => #1
  New Sampling Frequency = 1024
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
-> Reference Channel => #2
  Channel = 33;34
  Channel Matching Method = Index
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "!13" => #4
  Channel List = 13
  Action = Reject
  Channel Matching Method = Index
Data=#4, Stimulations=#0.Stimulations -> Signal display "raw signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Number_05
-> Channel Selector "14;15;16;17;18;19;20;21;22"
  Channel List = 14;15;16;17;18;19;20;21;22
  Action = Select
  Channel Matching Method = Index
-> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59.5
  High Cut-off Frequency (Hz) = 60.5
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #9
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#8 -> Temporal Filter => #10
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 27
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#8 -> Temporal Filter => #11
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 41
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#8 -> Temporal Filter => #12
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 55
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
Input 1=#9, Input 2=#10, Input 3=#11, Input 4=#12 -> Signal Merger
-> Matlab Scripting => #14
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/MATLAB.exe
  Matlab working directory = C:/Users/BioComput_HGKim/Desktop/9_SSVEP/OpenViBE_Matlab_scripts/function_1player
  Initialize function = Initialize
  Process function = SSVEP_Process
  Uninitialize function = Uninitialize
Data=#14 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> TCP Writer
  Port = 5678
  Output format = Raw
Signal=#1, Stimulation=#0.Stimulations -> GDF file writer
  Filename = run_feedback-[$core{date}-$core{time}].gdf
